PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = smallMonitor
  Resources = ['png/arrow_cwccw_y.png', 'png/arrow_cwccw_x.png', 'conditions_exp2512.xlsx', 'mp4/bboy_silhouette_static.mp4', 'mp4/bboy_silhouette.mp4']
  Save csv file = True
  Screen = 1
  Units = height
  Use version = 2022.1.4
  Window size (pixels) = [1710, 1112]
  color = -1.0000, -1.0000, -1.0000
  expName = 2512_pred_exp
  keyboardBackend = Pyglet
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Routines
  Routine trial
    KeyboardComponent key_resp
      allowedKeys = 'f', 'j', 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      store = all keys
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    MovieComponent mov00
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie [set every repeat] = $movItems
      size = (1120, 896)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      units = pix
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        trialCounter = 0
        strCounter = str(trialCounter)
        nRestTrial = 6
      Begin Routine:
        trialCounter = trialCounter + 1

        if trialCounter % nRestTrial == 0:
            isRest = 0
        else:
            isRest = 1
      End Routine:
        strCounter = str(trialCounter)
    KeyboardComponent finish_judge_3
      allowedKeys = 'q'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    PolygonComponent fixation
      fillColor = 1.0000, -0.2235, -0.4431
      lineColor = 1.0000, -0.2235, -0.4431
      shape = cross
      size = (25, 25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      units = pix
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  Routine outro
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Thank you.
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  Routine breakt
    TextboxComponent textbox_11
      autoLog = False
      bold = False
      disabled = True
      editable = False
      font = MS Gothic
      letterHeight = 0.05
      lineSpacing = 1
      saveStartStop = False
      size = (800, 800)
      startVal [time (s)] = 0.0
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      text:
        休憩してください。
        黄色のバーが無くなってから(60秒)
        任意のタイミングで[space]を押して再開してください。

        回転方向が変わったと感じたら次のキーを押してください。
        1. 時計回り → [F]
        2. 反時計回り → [J]
        3. その他 → [space]
        押し続ける必要はありません。
    ImageComponent image_4
      disabled = True
      image = png/arrow_cwccw_x.png
      pos = (0, -400)
      saveStartStop = False
      size = (600, 150)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_breaktime_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 60
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    KeyboardComponent finish_judge_4
      allowedKeys = 'q'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    PolygonComponent polygon
      fillColor = 0.8824, 0.8039, 0.0980
      lineColor = 0.8824, 0.8039, 0.0980
      pos [set every frame] = (-5*t, -250)
      saveStartStop = False
      shape = rectangle
      size [set every frame] = (600-10*t, 50)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      units = pix
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    ImageComponent img_inst4
      image = png/inst4.png
      saveStartStop = False
      size = (1000, 352)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent text_shintyoku
      letterHeight = 0.05
      pos = (0.9, 0.9)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $strCounter + '/6'
      units = norm
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  Routine demo
    KeyboardComponent finish_judge
      allowedKeys = 'q'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    KeyboardComponent key_resp_demo
      allowedKeys = 'f', 'j', 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      store = all keys
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    KeyboardComponent key_resp_selection
      allowedKeys = 'l','r','b'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      store = nothing
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    VariableComponent opa_cw
      saveEndRoutine = False
      saveStartStop = False
      startExpValue = 1.0
      startRoutineValue = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 120
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    VariableComponent opa_ccw
      saveEndRoutine = False
      saveStartStop = False
      startExpValue = 1.0
      startRoutineValue = 1.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 120
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    MovieComponent mov
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = mp4/demo/taisoufuku_demo_120sec.mp4
      opacity [set every frame] = 1.0
      size = (1450, 870)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      units = pix
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    PolygonComponent polygon_cw
      disabled = True
      fillColor = -1.0000, -1.0000, -0.5000
      lineColor = -1.0000, -1.0000, -0.5000
      opacity [set every frame] = opa_ccw
      pos = (480, 0)
      saveStartStop = False
      shape = rectangle
      size = (480, 800)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      units = pix
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    PolygonComponent polygon_ccw
      disabled = True
      fillColor = -0.5000, -1.0000, -1.0000
      lineColor = -0.5000, -1.0000, -1.0000
      opacity [set every frame] = opa_cw
      pos = (-480, 0)
      saveStartStop = False
      shape = rectangle
      size = (480, 800)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      units = pix
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    PolygonComponent polygon_6
      fillColor = 1.0000, -0.2235, -0.4431
      lineColor = 1.0000, -0.2235, -0.4431
      saveStartStop = False
      shape = cross
      size = (25, 25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      units = pix
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    CodeComponent code_2
      Code Type = Auto->JS
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      Each Frame:
        val = key_resp_selection.keys

        # opacity 0 means movie appearing
        # opacity 1 means movie disappearing
        if val == 'l':
            opa_cw = 0.0
            opa_ccw = 1.0
        elif val == 'r':
            opa_cw = 1.0
            opa_ccw = 0.0
        else:
            opa_cw = 1.0
            opa_ccw = 1.0
    ImageComponent mask_cw
      image = png/mask_l.png
      opacity [set every frame] = opa_cw
      pos = (-480, 0)
      saveStartStop = False
      size = (480, 800)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      units = pix
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    ImageComponent mask_ccw
      image = png/mask_r.png
      opacity [set every frame] = opa_ccw
      pos = (480, 0)
      saveStartStop = False
      size = (480, 800)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      units = pix
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  Routine mihon
    TextboxComponent textbox_2
      autoLog = False
      bold = False
      borderColor = Black
      disabled = True
      editable = False
      fillColor = Black
      font = MS Gothic
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      size = (1, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = 時計回りなので[F]を押す
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    TextboxComponent textbox_3
      autoLog = False
      bold = False
      disabled = True
      editable = False
      font = MS Gothic
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      size = (1, 0.2)
      startVal [time (s)] = 10
      stopVal [duration (s)] = 15
      text = 反時計回りなので[J]を押す
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    TextboxComponent textbox_4
      autoLog = False
      bold = False
      disabled = True
      editable = False
      font = MS Gothic
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      size = (1, 0.2)
      startVal [time (s)] = 25
      stopVal [duration (s)] = 5
      text = 時計回りなので[F]を押す
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    TextboxComponent textbox_5
      autoLog = False
      bold = False
      disabled = True
      editable = False
      font = MS Gothic
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      size = (1, 0.2)
      startVal [time (s)] = 30
      stopVal [duration (s)] = 10
      text = 反時計回りなので[J]を押す
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    TextboxComponent textbox_6
      autoLog = False
      bold = False
      disabled = True
      editable = False
      font = MS Gothic
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      size = (1, 0.2)
      startVal [time (s)] = 40
      stopVal [duration (s)] = 5
      text = 時計回りなので[F]を押す
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    TextboxComponent textbox_7
      autoLog = False
      bold = False
      disabled = True
      editable = False
      font = MS Gothic
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      size = (1, 0.2)
      startVal [time (s)] = 45
      stopVal [duration (s)] = 7
      text = 反時計回りなので[J]を押す
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    TextboxComponent textbox_8
      autoLog = False
      bold = False
      disabled = True
      editable = False
      font = MS Gothic
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      size = (1, 0.2)
      startVal [time (s)] = 52
      stopVal [duration (s)] = 8
      text = 時計回りなので[F]を押す
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    MovieComponent movie
      backend = moviepy
      forceEndRoutine = False
      movie = mp4/catch_demo.mp4
      saveStartStop = False
      size = (1420, 800)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      units = pix
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    KeyboardComponent key_resp_mihon
      allowedKeys = 'f', 'j', 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      store = all keys
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    KeyboardComponent finish_judge_2
      allowedKeys = 'q'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    PolygonComponent fixation_2
      fillColor = 1.0000, -0.2235, -0.4431
      lineColor = 1.0000, -0.2235, -0.4431
      shape = cross
      size = (25, 25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      units = pix
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  Routine introduction1
    TextboxComponent textbox_10
      autoLog = False
      bold = False
      borderColor = Black
      disabled = True
      editable = False
      fillColor = Black
      font = MS Gothic
      letterHeight = 0.05
      lineSpacing = 1
      saveStartStop = False
      size = (800, 800)
      startVal [time (s)] = 0.0
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      text:
        今から回転するシルエット動画を見てもらいます。

        回転方向が変わったと感じたら
        次のキーを押してください。
        1. 上から見て時計回り → [F]
        2. 上から見て反時計回り → [J]
        3. その他 → [space]
        押し続ける必要はありません。

        例えば、動画が開始した瞬間に時計回りだと
        感じたら[F]を一度押し、しばらく見ている中で
        反時計回りだと感じたら[J]を一度押してください。

        [space]を押すとシルエットを使用しない練習が始まります。
    KeyboardComponent key_resp_instruction_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent img_inst1
      image = png/inst1.png
      saveStartStop = False
      size = (1000, 528)
      startVal [time (s)] = 0.0
      units = pix
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    CodeComponent make_seed
      Code Type = Both
      Begin Experiment:
        seedBase = 0
      Begin JS Experiment:
        seedBase = 0;
        const s = (expInfo['participant'] || '').toString();
        for (let i = 0; i < s.length; i++) {
          seedBase = (seedBase * 31 + s.charCodeAt(i)) >>> 0;
        }
  Routine introduction3
    TextboxComponent textbox_9
      autoLog = False
      bold = False
      disabled = True
      editable = False
      font = MS Gothic
      letterHeight = 0.05
      lineSpacing = 1
      saveStartStop = False
      size = (800, 800)
      startVal [time (s)] = 0.0
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      text:
        回転方向が変わったと感じたら
        次のキーを押してください。
        1. 上から見て時計回り → [F]
        2. 上から見て反時計回り → [J]
        3. その他 → [space]
        押し続ける必要はありません。

        [space]を押すと本番が始まります。
    ImageComponent img_inst3
      image = png/inst3.png
      saveStartStop = False
      size = (1000, 687)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_instruction_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine introduction2
    KeyboardComponent key_resp_instruction
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent img_inst2
      image = png/inst2.png
      saveStartStop = False
      size = (1000, 528)
      startVal [time (s)] = 0.0
      units = pix
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  Routine catch_trial
    KeyboardComponent key_resp_catch
      allowedKeys = 'f', 'j', 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      store = all keys
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    MovieComponent mov_catch
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie [set every repeat] = mp4/catch.mp4
      size = (1120, 896)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      units = pix
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    PolygonComponent fixation_catch
      fillColor = 1.0000, -0.2235, -0.4431
      lineColor = 1.0000, -0.2235, -0.4431
      saveStartStop = False
      shape = cross
      size = (25, 25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      units = pix
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Flow
  Routine introduction1
  Routine mihon
  Routine introduction2
  Routine demo
  Routine introduction3
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = conditions_exp2512.xlsx
    loopType = random
    nReps = 1
    random seed = seedBase + 100
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    conditions:
      [{'movItems': 'mp4/dance_rigid.mp4'},
      {'movItems': 'mp4/dance_nonrigid.mp4'},
      {'movItems': 'mp4/dance_rigid_mask_shuffle.mp4'}]
    Routine trial
    Routine breakt
  LoopTerminator trials_2
  Routine catch_trial
  Routine breakt
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions_exp2512.xlsx
    loopType = random
    nReps = 1
    random seed = seedBase + 10
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    conditions:
      [{'movItems': 'mp4/dance_rigid.mp4'},
      {'movItems': 'mp4/dance_nonrigid.mp4'},
      {'movItems': 'mp4/dance_rigid_mask_shuffle.mp4'}]
    Routine trial
    LoopInitiator restOrNot loopType="TrialHandler"
      loopType = random
      nReps = isRest
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      Routine breakt
    LoopTerminator restOrNot
  LoopTerminator trials
  Routine outro
